PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = resurgence
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Routines
  Routine instructions
    CodeComponent global_clock
      Code Type = Both
      Begin JS Experiment:
        new util.Clock()
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        In the following phases, you will see three colored squares on the screen. Clicking on the squares may or may not result in points. Your point total will be shown in the upper right-hand corner of the screen.

        At the end of the task, you will be awarded \$0.01 per point earned. For example, if you earn 1000 points, you will receive \$10.00. If you close the program, we will lose all data and your session will end. When you are ready to begin, press the space bar to begin this experiment.
    KeyboardComponent exp_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine end_text
    TextComponent end_text_
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.50
      stopVal [duration (s)] = 5.00
      text = Thank you for participating! This experiment has ended. The total amount of points you earned was: 
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    TextComponent ovr_bank_amount
      letterHeight = 0.05
      pos = (0, -0)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
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      text [set every frame]:
        $ovr_bank
  Routine phase_1
    PolygonComponent target
      fillColor = $[-1, -1, 1]
      opacity [set every frame] = 1
      pos [set every frame] = (-cos(t*0.5)*0.75, cos(t*0.25)*0.4)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.5
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    PolygonComponent alternative
      fillColor = $[1, 0.294117647058824, -1]
      opacity [set every frame] = 1
      pos [set every frame] = (cos(t*0.5)*0.75, (cos(t*-0.25+2.57)*-0.4))
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.5
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    PolygonComponent control
      fillColor = $[-1, -1, -1]
      opacity [set every frame] = 1
      pos [set every frame] = (cos((t+2.57)*0.5)*0.75, cos(t*-0.25)*-0.4)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.5
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    MouseComponent mouse
      clickable = target, alternative, control
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name, pos
      startVal [time (s)] = 0.50
      timeRelativeTo = routine
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    PolygonComponent mask
      fillColor = grey
      lineColor = grey
      lineWidth = 0
      opacity [set every frame] = $mask_opacity
      shape = rectangle
      size = (10, 10)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        ovr_bank  = 0
      Begin JS Experiment:
        ovr_bank = 0;
      Begin JS Routine:
        import {Sound} from 'psychopy/sound';
        var all_count, alt_count, bank, con_count, consume_position, curr_opacity, duration, mask_opacity, tar_count, timer;
        function play_sound() {
            var beep;
            beep = new sound.Sound("A", {"secs": 0.3});
            beep.setVolume(1);
            beep.play();
            core.wait(0.3);
        }
        timer = new util.CountdownTimer(5);
        duration = new util.Clock();
        bank = 0;
        curr_opacity = 0;
        mask_opacity = 0;
        consume_position = [10, 0];
        //tar_count = 0;
        //alt_count = 0;
        //con_count = 0;
        //all_count = 0;
        //
      Begin Routine:
        # Sound function
        from psychopy.sound import Sound
        def play_sound():
            beep = sound.Sound('A', secs=.3)
            beep.setVolume(1)
            beep.play()
            core.wait(.3)

        # Timers
        timer = core.CountdownTimer(20)
        duration = core.Clock()

        # Variables to save
        bank = 0
        curr_opacity=0
        mask_opacity=0
        consume_position = (10, 0)

        # Counts of responses for stability calculations
        #tar_count = 0
        #alt_count = 0
        #con_count = 0
        #all_count = 0

        ### DEAD CODE TRYING TO CALCULATE STABILITY
        #def splice_list(list, t_1, t_2):
        #    temp_count = 0
        #    for i in list:
        #        if i >= t_1:
        #            if i <= t_2:
        #                temp_count = temp_count +1
        #
        #def calc_stability(response_list):
        #    cur_time = duration.getTime() # Get current time
        #    # Get times for thee comparison bins
        #    three_start = cur_time - 30
        #    three_end = cur_time - 20
        #    two_end = cur_time - 10
        #    # Get number of responses per time bin
        #    temp_3 = splice_list(response_list , three_start, three_end)
        #    temp_2 = splice_list(response_list , three_end, two_end)
        #    temp_1 = splice_list(response_list , two_end, cur_time)
        #    y = [temp_3, temp_2, temp_1]
        #    # Calculate if responding meets stability criteria
        #    if (max(y) - min(y)) <=6:
        #        change_y = y[2] - y[0]
        #        change_x = 25-5
        #        temp_slope = change_y / change_x
        #        if temp_slope <= 0.15*max(y):
        #            return True
        #        else:
        #            return False
      Each Frame:
        # Present SR+ following target response
        if mouse.isPressedIn(target):
        #    tar_count +=1
        #    all_count +=1
            consume_position=(0, 0)
            curr_opacity=1
            mask_opacity=1
            play_sound()

        # No consequence for alternative or control responses
        #if mouse.isPressedIn(alternative):
        #    alt_count +=1
        #    all_count +=1

        #if mouse.isPressedIn(control):
        #    con_count +=1
        #    all_count +=1

        # Consummatory response
        if mouse.isPressedIn(consume):
            consume_position=(10, 0)
            curr_opacity=0
            mask_opacity=0
            bank+=1
            ovr_bank+=1

        # Max condition duration of 10 mins
        if timer.getTime()<=0:
            continueRoutine=False

        # Calculate whether responding is stable
        #if duration.getTime() >= 30:
        #    if duration.getTime() % 30 == 0:
        #        # Determine if target stable
        #        tar_stable = calc_stability(tar_times)
        #        if tar_stable == True:
        #            # Determine if alt stable
        #            alt_stable = calc_stability(alt_times)
        #            if alt_stable == True:
        #                # Determine if control stable
        #                con_stable = calc_stability(con_times)
        #                if con_stable==True:
        #                    continueRoutine=False
        #                else:
        #                    continue
        #            else:
        #                continue
        #        else:
        #            continue
        #    else:
        #        continue
        #else:
        #    continue
      Each JS Frame:
        if (mouse.isPressedIn(target)) {
        //    tar_count += 1;
        //    all_count += 1;
            consume_position = [0, 0];
            curr_opacity = 1;
            mask_opacity = 1;
            play_sound();
        }
        //if (mouse.isPressedIn(alternative)) {
        //    alt_count += 1;
        //    all_count += 1;
        //}
        //if (mouse.isPressedIn(control)) {
        //    con_count += 1;
        //    all_count += 1;
        //}
        if (mouse.isPressedIn(consume)) {
            consume_position = [10, 0];
            curr_opacity = 0;
            mask_opacity = 0;
            bank += 1;
            ovr_bank += 1;
        }
        if ((timer.getTime() <= 0)) {
            continueRoutine = false;
        }
    TextComponent consequence
      letterHeight = 0.1
      opacity [set every frame] = $curr_opacity
      pos = (0, 0.15)
      startVal [time (s)] = 0.5
      text = +1 Point
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    TextComponent bank_amount
      letterHeight = 0.05
      pos = (0.85, 0.45)
      startVal [time (s)] = 0.0
      text [set every frame] = $bank
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    TextComponent bank_text
      letterHeight = 0.05
      pos = (0.65, .45)
      startVal [time (s)] = 0.0
      text = Phase 1 Bank: 
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    TextComponent consume
      letterHeight = 0.05
      opacity [set every frame] = $mask_opacity
      pos [set every frame] = $consume_position
      startVal [time (s)] = 0.0
      text = Click to collect. 
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  Routine phase_2
    PolygonComponent target_2
      fillColor = $[-1, -1, 1]
      opacity [set every frame] = 1
      pos [set every frame] = (-cos(t*0.5)*0.75, cos(t*0.25)*0.4)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.5
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    PolygonComponent alternative_2
      fillColor = $[1, 0.294117647058824, -1]
      opacity [set every frame] = 1
      pos [set every frame] = (cos(t*0.5)*0.75, (cos(t*-0.25+2.57)*-0.4))
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.5
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    PolygonComponent control_2
      fillColor = $[-1, -1, -1]
      opacity [set every frame] = 1
      pos [set every frame] = (cos((t+2.57)*0.5)*0.75, cos(t*-0.25)*-0.4)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.5
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    MouseComponent mouse_2
      clickable = target, alternative, control
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name, pos
      startVal [time (s)] = 0.50
      timeRelativeTo = routine
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    PolygonComponent mask_2
      fillColor = grey
      lineColor = grey
      lineWidth = 0
      opacity [set every frame] = $mask_opacity
      shape = rectangle
      size = (10, 10)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        import {Sound} from 'psychopy/sound';
        var all_count, alt_count, bank, con_count, consume_position, curr_opacity, mask_opacity, tar_count, timer;
        function play_sound() {
            var beep;
            beep = new sound.Sound("A", {"secs": 0.3});
            beep.setVolume(1);
            beep.play();
            core.wait(0.3);
        }
        timer = new util.CountdownTimer(5);
        bank = 0;
        curr_opacity = 0;
        mask_opacity = 0;
        consume_position = [10, 0];
        //tar_count = 0;
        //alt_count = 0;
        //con_count = 0;
        //all_count = 0;
        //
      Begin Routine:
        # Sound function
        from psychopy.sound import Sound
        def play_sound():
            beep = sound.Sound('A', secs=.3)
            beep.setVolume(1)
            beep.play()
            core.wait(.3)

        # Timer
        timer = core.CountdownTimer(20)

        # Some variables we'll need
        bank = 0
        curr_opacity=0
        mask_opacity=0
        consume_position = (10, 0)

        # Saving data for stability calculations
        #tar_count = 0
        #alt_count=0
        #con_count=0
        #all_count=0
      Each Frame:
        #if mouse.isPressedIn(target_2):
        #    tar_count+=1
        #    all_count +=1

        if mouse.isPressedIn(alternative_2):
            consume_position=(0, 0)
            curr_opacity=1
            mask_opacity=1
        #    alt_count+=1
        #    all_count+=1
            play_sound()

        #if mouse.isPressedIn(control_2):
        #    con_count+=1
        #    all_count+=1

        if mouse.isPressedIn(consume_2):
            consume_position=(10, 0)
            curr_opacity=0
            mask_opacity=0
            bank+=1
            ovr_bank+=1

        if timer.getTime()<=0:
            continueRoutine=False
      Each JS Frame:
        //if (mouse.isPressedIn(target_2)) {
        //    tar_count += 1;
        //    all_count += 1;
        //}
        if (mouse.isPressedIn(alternative_2)) {
            consume_position = [0, 0];
            curr_opacity = 1;
            mask_opacity = 1;
        //    alt_count += 1;
        //    all_count += 1;
            play_sound();
        }
        //if (mouse.isPressedIn(control_2)) {
        //    con_count += 1;
        //    all_count += 1;
        //}
        if (mouse.isPressedIn(consume_2)) {
            consume_position = [10, 0];
            curr_opacity = 0;
            mask_opacity = 0;
            bank += 1;
            ovr_bank += 1;
        }
        if ((timer.getTime() <= 0)) {
            continueRoutine = false;
        }
    TextComponent consequence_2
      letterHeight = 0.1
      opacity [set every frame] = $curr_opacity
      pos = (0, 0.15)
      startVal [time (s)] = 0.5
      text = +1 Point
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    TextComponent bank_amount_2
      letterHeight = 0.05
      pos = (0.85, 0.45)
      startVal [time (s)] = 0.0
      text [set every frame] = $bank
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    TextComponent bank_text_2
      letterHeight = 0.05
      pos = (0.65, .45)
      startVal [time (s)] = 0.0
      text = Phase 2 Bank: 
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    TextComponent consume_2
      letterHeight = 0.05
      opacity [set every frame] = $mask_opacity
      pos [set every frame] = $consume_position
      startVal [time (s)] = 0.0
      text = Click to collect. 
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  Routine phase_3
    PolygonComponent target_3
      fillColor = $[-1, -1, 1]
      pos [set every frame] = (-cos(t*0.5)*0.75, cos(t*0.25)*0.4)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.5
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    PolygonComponent alternative_3
      fillColor = $[1, 0.294117647058824, -1]
      pos [set every frame] = (cos(t*0.5)*0.75, (cos(t*-0.25+2.57)*-0.4))
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.5
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    PolygonComponent control_3
      fillColor = $[-1, -1, -1]
      pos [set every frame] = (cos((t+2.57)*0.5)*0.75, cos(t*-0.25)*-0.4)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.5
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    MouseComponent mouse_3
      clickable = target, alternative, control
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name, pos
      startVal [time (s)] = 0.50
      timeRelativeTo = routine
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    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        timer = new util.CountdownTimer(5);
        bank = 0;
        curr_opacity = 0;
        mask_opacity = 0;
        consume_position = [10, 0];
        //target_count = 0;
        //alt_count = 0;
        //control_count = 0;
        //
      Begin Routine:
        timer = core.CountdownTimer(5)
        bank = 0
        curr_opacity=0
        mask_opacity=0
        consume_position = (10, 0)
        #
        #target_count = 0
        #alt_count=0
        #control_count=0
      Each Frame:
        #if mouse.isPressedIn(target_3):
        #    target_count+=1
        #    control_count
        #
        #if mouse.isPressedIn(alternative_3):
        #    alt_count+=1
        #
        #if mouse.isPressedIn(control_3):
        #    control_count+=1

        if timer.getTime()<=0:
            continueRoutine=False
      Each JS Frame:
        //if (mouse.isPressedIn(target_3)) {
        //    target_count += 1;
        //    control_count;
        //}
        //if (mouse.isPressedIn(alternative_3)) {
        //    alt_count += 1;
        //}
        //if (mouse.isPressedIn(control_3)) {
        //    control_count += 1;
        //}
        if ((timer.getTime() <= 0)) {
            continueRoutine = false;
        }
    TextComponent bank_amount_3
      letterHeight = 0.05
      pos = (0.85, 0.45)
      startVal [time (s)] = 0.0
      text [set every frame] = $bank
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    TextComponent bank_text_3
      letterHeight = 0.05
      pos = (0.65, .45)
      startVal [time (s)] = 0.0
      text = Phase 3 Bank: 
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  Routine practice
    PolygonComponent target_p
      fillColor = $[-1, -1, 1]
      opacity [set every frame] = 1
      pos [set every frame] = (-cos(t*0.5)*0.75, cos(t*0.25)*0.4)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.5
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    PolygonComponent alternative_p
      fillColor = $[1, 0.294117647058824, -1]
      opacity [set every frame] = 1
      pos [set every frame] = (cos(t*0.5)*0.75, (cos(t*-0.25+2.57)*-0.4))
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.5
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    PolygonComponent control_p
      fillColor = $[-1, -1, -1]
      opacity [set every frame] = 1
      pos [set every frame] = (cos((t+2.57)*0.5)*0.75, cos(t*-0.25)*-0.4)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.5
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    MouseComponent mouse_p
      clickable = target, alternative, control
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name, pos
      startVal [time (s)] = 0.50
      timeRelativeTo = routine
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    CodeComponent code_p
      Code Type = Both
      Begin Experiment:
        ovr_bank = 0
      Begin JS Experiment:
        ovr_bank = 0;
      Begin JS Routine:
        import {Sound} from 'psychopy/sound';
        var alt_count, bank, con_count, consume_position, curr_opacity, duration, mask_opacity, tar_count, timer;
        function play_sound() {
            var beep;
            beep = new sound.Sound("A", {"secs": 0.3});
            beep.setVolume(1);
            beep.play();
            core.wait(0.3);
        }
        duration = new util.Clock();
        timer = new util.CountdownTimer(60);
        tar_count = 0;
        alt_count = 0;
        con_count = 0;
        bank = 0;
        curr_opacity = 0;
        mask_opacity = 0;
        consume_position = [10, 0];
      Begin Routine:
        # Function to play sound on click
        from psychopy.sound import Sound
        def play_sound():
            beep = sound.Sound('A', secs=.3)
            beep.setVolume(1)
            beep.play()
            core.wait(.3)

        # Some clocks
        duration = core.Clock()
        timer = core.CountdownTimer(60)  # Phase timer

        # Store number of responses
        tar_count = 0
        alt_count = 0
        con_count = 0

        # Variables we'll update and display
        bank = 0
        curr_opacity=0
        mask_opacity=0
        consume_position = (10, 0)
      Each Frame:
        if mouse.isPressedIn(target_p):
            consume_position=(0, 0)
            curr_opacity=1
            mask_opacity=1
            play_sound()
            tar_count +=1

        if mouse.isPressedIn(alternative_p):
            consume_position=(0, 0)
            curr_opacity=1
            mask_opacity=1
            play_sound()
            alt_count +=1

        if mouse.isPressedIn(consume_p):
            consume_position=(100, 0)
            curr_opacity=0
            mask_opacity=0
            bank+=1
            con_count +=1

        if timer.getTime() <=40:
            if tar_count > 8:
                if alt_count > 8:
                    if con_count > 8:
                        continueRoutine=False

        if timer.getTime()<=0:
            continueRoutine=False
      Each JS Frame:
        if (mouse.isPressedIn(target_p)) {
            consume_position = [0, 0];
            curr_opacity = 1;
            mask_opacity = 1;
            play_sound();
            tar_count += 1;
        }
        if (mouse.isPressedIn(alternative_p)) {
            consume_position = [0, 0];
            curr_opacity = 1;
            mask_opacity = 1;
            play_sound();
            alt_count += 1;
        }
        if (mouse.isPressedIn(consume_p)) {
            consume_position = [100, 0];
            curr_opacity = 0;
            mask_opacity = 0;
            bank += 1;
            con_count += 1;
        }
        if ((timer.getTime() <= 40)) {
            if ((tar_count > 8)) {
                if ((alt_count > 8)) {
                    if ((con_count > 8)) {
                        continueRoutine = false;
                    }
                }
            }
        }
        if ((timer.getTime() <= 0)) {
            continueRoutine = false;
        }
    PolygonComponent mask_p
      fillColor = grey
      lineColor = grey
      lineWidth = 0
      opacity [set every frame] = $mask_opacity
      shape = rectangle
      size = (10, 10)
      startVal [time (s)] = 0.0
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    TextComponent consequence_p
      letterHeight = 0.1
      opacity [set every frame] = $curr_opacity
      pos = (0, 0.15)
      startVal [time (s)] = 0.5
      text = +1 Point
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    TextComponent bank_amount_p
      letterHeight = 0.05
      pos = (0.85, 0.45)
      startVal [time (s)] = 0.0
      text [set every frame] = $bank
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    TextComponent bank_text_p
      letterHeight = 0.05
      pos = (0.65, .45)
      startVal [time (s)] = 0.0
      text = Current Bank: 
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    TextComponent consume_p
      letterHeight = 0.05
      opacity [set every frame] = $mask_opacity
      pos [set every frame] = $consume_position
      startVal [time (s)] = 0.0
      text = Click to collect. 
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  Routine ici_1
    TextComponent ici_1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.50
      stopVal [duration (s)] = 5.00
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      text:
        Phase 1 has ended.
        Please wait while Phase 2 loads.
    TextComponent click_ph2
      letterHeight = 0.05
      startVal [time (s)] = 6.00
      text = Press the space bar to begin Phase 2. 
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    KeyboardComponent begin_ph2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 6.00
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  Routine begin_ici
    TextComponent begin_text
      letterHeight = 0.05
      startVal [time (s)] = 0.50
      stopVal [duration (s)] = 5.00
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      text:
        It looks like you’re getting the hang of this!

        Please wait while Phase 1 loads.
    TextComponent click_ph1
      letterHeight = 0.05
      startVal [time (s)] = 6.00
      text = Press the space bar to continue to Phase 1. 
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    KeyboardComponent begin_ph1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 6.00
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  Routine ici_2
    TextComponent ici_2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.00
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      text:
        Phase 2 has ended.
        Please wait while Phase 3 loads.
    TextComponent click_ph3
      letterHeight = 0.05
      startVal [time (s)] = 6.00
      text = Press the space bar to begin Phase 3. 
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    KeyboardComponent begin_ph3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 6.00
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Flow
  Routine instructions
  LoopInitiator practice_trials loopType="TrialHandler"
    conditions = [OrderedDict([('corr_response', 'target'), ('chime', 'chime.wav')])]
    conditionsFile = condition_file.csv
    loopType = random
    nReps = 1
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    Routine practice
  LoopTerminator practice_trials
  Routine begin_ici
  LoopInitiator ph_1_trials loopType="TrialHandler"
    conditionsFile = condition_file.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('corr_response', 'target')]),
      OrderedDict([('corr_response', 'alternative')]),
      OrderedDict([('corr_response', 'control')])]
    Routine phase_1
  LoopTerminator ph_1_trials
  Routine ici_1
  LoopInitiator ph_2_trials loopType="TrialHandler"
    conditions = [OrderedDict([('corr_response', 'target')])]
    conditionsFile = condition_file.csv
    loopType = random
    nReps = 1
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    Routine phase_2
  LoopTerminator ph_2_trials
  Routine ici_2
  LoopInitiator ph_3_trials loopType="TrialHandler"
    conditions = [OrderedDict([('corr_response', 'target')])]
    conditionsFile = condition_file.csv
    loopType = random
    nReps = 1
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    Routine phase_3
  LoopTerminator ph_3_trials
  Routine end_text
